<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="400" y="100" z="1"/>
      <Steps>500</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cell"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="cell" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="cell" LambdaSurface="2.0" TargetSurface="50"/>
   </Plugin>
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell type has different force. -->
      <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
      <!-- Algorithm options are: PixelBased, CenterOfMassBased -->
      <Algorithm>PixelBased</Algorithm>
      <ExternalPotentialParameters CellType="cell" x="-10" y="0.0" z="0.0"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="cell">10.0</Energy>
      <Energy Type1="cell" Type2="cell">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
